CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"DateTime": "text", "FileLocation": "text", "Frame": "none", "PixelScale": "integer", "Plate": "integer", "Probability": "text", "Series": "none", "WellColumn": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>[0-9]{10,11})_Scan_(?P<DateTime>.*?)_Well_(?P<WellColumn>[A-Z][0-9]{1,3})_Ch1_(?P<PixelScale>[0-9]{1,2})um_RescaleAndCrop(?P<Probability>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "RescaleAndCrop.tiff")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Probabilities.tif")
    Name to assign these images:BFProbability
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:BFProbability
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:ColonyProb
    Convert green to gray?:Yes
    Name the output image:BackgroundProb
    Convert blue to gray?:Yes
    Name the output image:DeadCellProb
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
MeasureImageQuality:[module_num:6|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:BF
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:6
    Spatial scale for blur measurements:12
    Spatial scale for blur measurements:24
    Spatial scale for blur measurements:48
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:Yes
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:ColonyProb
    Name the primary objects to be identified:ColonyBeforeFilling
    Typical diameter of objects, in pixel units (Min,Max):40,100000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.7,0.7
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    Log transform before thresholding?:Yes
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
FillObjects:[module_num:8|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
    Select the input object:ColonyBeforeFilling
    Name the output object:Colony
    Minimum hole size:50
    Planewise fill:No

Threshold:[module_num:9|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
    Select the input image:DeadCellProb
    Name the output image:DeadCellMaskImage
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.5,0.5
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    Log transform before thresholding?:Yes
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
ConvertImageToObjects:[module_num:10|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
    Select the input image:DeadCellMaskImage
    Name the output object:DeadCellObjects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:2

Threshold:[module_num:11|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
    Select the input image:BackgroundProb
    Name the output image:BackgroundMaskImage
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.5,0.5
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    Log transform before thresholding?:Yes
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:Colony
    Name the output image:ColonyMaskImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:13|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:WellAreaImage
    Image or measurement?:Image
    Select the first image:BackgroundMaskImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DeadCellMaskImage
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:ColonyMaskImage
    Multiply the third image by:1.0
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:WellAreaImage
    Name the primary objects to be identified:WellObjects
    Typical diameter of objects, in pixel units (Min,Max):200,100000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.5,1.0
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    Log transform before thresholding?:Yes
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
OverlayObjects:[module_num:15|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
    Input:BF
    Name the output image:OverlayObjects
    Objects:Colony
    Opacity:0.2

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OverlayObjects
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:blue
    Select objects to display:Colony
    Select outline color:red
    Select objects to display:DeadCellObjects

MeasureImageAreaOccupied:[module_num:17|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
    Measure the area occupied by:Both
    Select binary images to measure:BackgroundMaskImage, ColonyMaskImage, DeadCellMaskImage
    Select object sets to measure:Colony, WellObjects

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:ImageDATA.csv
    Use the object name for the file name?:No
    Data to export:Colony
    Combine these object measurements with those of the previous object?:No
    File name:ObjectDATA.csv
    Use the object name for the file name?:No
    Data to export:WellObjects
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
